#include "STAR_OEM_Test.res"
 namespace _Method { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _Method { #include "HSLJson\\HSLJson.hsl" }
 namespace _Method { #include "STAR_OEM_toolkit.hs_" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLDevLib.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
variable loopCounterMain;
variable msg;
object objJSONFromServer;
variable commandFromServer;
variable initializeAlways;
variable o_stepReturn;
object objJSONToServer;
sequence seq;
variable tipSequence;
variable sequenceCounting;
variable channelVariable;
variable channelUse;
variable labwarePositions;
variable volumes;
variable aspirateSequence;
variable v;
variable arrayOfVolumes[];
variable liquidClass;
variable aspirateMode;
variable capacitiveLLD;
variable pressureLLD;
variable liquidFollowing;
variable submergeDepth;
variable liquidHeight;
variable maxLLdDifference;
variable mixCycles;
variable mixPosition;
variable mixVolume;
variable airTransportRetractDist;
variable touchOff;
variable aspPosAboveTouch;
variable o_liquidLevels_mm[];
variable o_liquidLevels_mL[];
variable o_stepReturn2;
variable o_stepReturn3;
variable dispenseMode;
variable dispenseSequence;
variable dispPositionAboveTouch;
variable zMoveAfterStep;
variable sideTouch;
variable wasteSequence;
variable useDefaultWaste;
variable reducedPatternMode;
variable aspirateVolume;
variable o_stepReturn4;
variable dispenseVolume;
variable tipEjectToKnownPosition;
variable carrierName;
variable barcodeFileName;
variable barcodeReadPositions;
variable o_carrierBC;
variable o_carrierPositionsBCs[];
variable lidSequence;
variable plateSequence;
variable toolSequence;
variable transportMode;
variable widthBefore;
variable gripHeight;
variable gripWidth;
variable gripSpeed;
variable gripperToolChannel;
variable checkPlate;
variable zSpeed;
variable gripForce;
sequence lidSeq;
sequence toolSeq;
variable xAcceleration;
variable platePressOnDistance;
variable ejectToolWhenFinish;
global device ML_STAR ("STAR_OEM_Test.lay", "ML_STAR", hslTrue);
object objHttp;
variable blnReturn;
variable blnSuccess;
variable a;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    STAR_OEM_TOOLKIT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    blnReturn = HSLHttp::Initialize(objHttp);
    if (blnReturn != blnSuccess)
    {
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("HTTP Test Method"), Translate(" - "), Translate("Error Initializing HTTP Library"), Translate(""));
      return;
    }
    SendTextMessageToServer(Translate("Hi, I´m a VENUS method."));
    {
      loopCounterMain = 0;
      while (1 == 1)
      {
        loopCounterMain = loopCounterMain + 1;
        commandFromServer = Translate("");
        o_stepReturn = Translate("");
        o_stepReturn2 = Translate("");
        o_stepReturn3 = Translate("");
        o_stepReturn4 = Translate("");
        msg = waitForGUItoContinue();
        Trace("JSON received from Server:", msg);
        HSLJsonLib::Create(objJSONFromServer);
        HSLJsonLib::ParseJson(objJSONFromServer, msg);
        HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("command"), commandFromServer);
        if (commandFromServer == "initialize")
        {
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("initializeAlways"), initializeAlways);
          STAR_OEM_TOOLKIT::Initialize(ML_STAR, initializeAlways, o_stepReturn);
          TrcTrace(Translate("Init step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""));
        }
        if (commandFromServer == "channelTipPickUp")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("tipSequence"), tipSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("channelUse"), channelUse);
          if (tipSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, tipSequence, seq);
          }
          STAR_OEM_TOOLKIT::Channels_1mL_TipPickUp(ML_STAR, seq, channelVariable, sequenceCounting, channelUse, o_stepReturn);
          TrcTrace(Translate("Tip pick up step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""));
        }
        if (commandFromServer == "channelAspirate")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("aspirateSequence"), aspirateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("channelUse"), channelUse);
          BuildArrayOfVolumesForChannels(channelVariable, arrayOfVolumes);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("liquidClass"), liquidClass);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("aspirateMode"), aspirateMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("capacitiveLLD"), capacitiveLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("pressureLLD"), pressureLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("liquidFollowing"), liquidFollowing);
          JSON_GetFloatValue(Translate("submergeDepth"), submergeDepth);
          JSON_GetFloatValue(Translate("liquidHeight"), liquidHeight);
          JSON_GetFloatValue(Translate("maxLLdDifference"), maxLLdDifference);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("mixCycles"), mixCycles);
          JSON_GetFloatValue(Translate("mixPosition"), mixPosition);
          JSON_GetFloatValue(Translate("mixVolume"), mixVolume);
          JSON_GetFloatValue(Translate("airTransportRetractDist"), airTransportRetractDist);
          JSON_GetFloatValue(Translate("aspPosAboveTouch"), aspPosAboveTouch);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("touchOff"), touchOff);
          if (aspirateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, aspirateSequence, seq);
          }
          STAR_OEM_TOOLKIT::Channels_1ml_Aspirate(ML_STAR, seq, arrayOfVolumes, channelVariable, liquidClass, sequenceCounting, channelUse, aspirateMode, capacitiveLLD, pressureLLD, liquidFollowing, submergeDepth, liquidHeight, maxLLdDifference, mixCycles, mixPosition, mixVolume, airTransportRetractDist, touchOff, aspPosAboveTouch, o_stepReturn, o_liquidLevels_mm, o_liquidLevels_mL);
          ArrayToString(o_liquidLevels_mm, o_stepReturn2);
          ArrayToString(o_liquidLevels_mL, o_stepReturn3);
          TrcTrace(Translate("Aspirate step return 1:"), o_stepReturn);
          TrcTrace(Translate("Aspirate step return 2:"), o_stepReturn2);
          TrcTrace(Translate("Aspirate step return 3:"), o_stepReturn3);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, Translate(""));
        }
        if (commandFromServer == "channelDispense")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("dispenseSequence"), dispenseSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("channelUse"), channelUse);
          BuildArrayOfVolumesForChannels(channelVariable, arrayOfVolumes);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("liquidClass"), liquidClass);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("dispenseMode"), dispenseMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("capacitiveLLD"), capacitiveLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("liquidFollowing"), liquidFollowing);
          JSON_GetFloatValue(Translate("submergeDepth"), submergeDepth);
          JSON_GetFloatValue(Translate("liquidHeight"), liquidHeight);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("mixCycles"), mixCycles);
          JSON_GetFloatValue(Translate("mixPosition"), mixPosition);
          JSON_GetFloatValue(Translate("mixVolume"), mixVolume);
          JSON_GetFloatValue(Translate("airTransportRetractDist"), airTransportRetractDist);
          JSON_GetFloatValue(Translate("dispPositionAboveTouch"), dispPositionAboveTouch);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("touchOff"), touchOff);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("zMoveAfterStep"), zMoveAfterStep);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sideTouch"), sideTouch);
          if (dispenseSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, dispenseSequence, seq);
          }
          STAR_OEM_TOOLKIT::Channels_1mL_Dispense(ML_STAR, seq, arrayOfVolumes, channelVariable, liquidClass, sequenceCounting, channelUse, dispenseMode, capacitiveLLD, liquidFollowing, submergeDepth, liquidHeight, mixCycles, mixPosition, mixVolume, airTransportRetractDist, touchOff, zMoveAfterStep, sideTouch, dispPositionAboveTouch, o_stepReturn, o_liquidLevels_mm, o_liquidLevels_mL);
          ArrayToString(o_liquidLevels_mm, o_stepReturn2);
          ArrayToString(o_liquidLevels_mL, o_stepReturn3);
          TrcTrace(Translate("Aspirate step return 1:"), o_stepReturn);
          TrcTrace(Translate("Aspirate step return 2:"), o_stepReturn2);
          TrcTrace(Translate("Aspirate step return 3:"), o_stepReturn3);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, Translate(""));
        }
        if (commandFromServer == "channelTipEject")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("wasteSequence"), wasteSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("channelUse"), channelUse);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("useDefaultWaste"), useDefaultWaste);
          if (useDefaultWaste == 0)
          {
            if (wasteSequence == "")
            {
              HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
            else
            {
              DevGetSequenceRef(ML_STAR, wasteSequence, seq);
            }
          }
          else
          {
            SeqCopySequence(seq, ML_STAR.Waste);
          }
          STAR_OEM_TOOLKIT::Channels_1mL_TipEject(ML_STAR, seq, channelVariable, sequenceCounting, channelUse, useDefaultWaste, o_stepReturn);
          TrcTrace(Translate("Tip eject step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""));
        }
        if (commandFromServer == "mph96TipPickUp")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("tipSequence"), tipSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("reducedPatternMode"), reducedPatternMode);
          if (tipSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, tipSequence, seq);
          }
          STAR_OEM_TOOLKIT::MPH96_TipPickUp(ML_STAR, seq, channelVariable, sequenceCounting, reducedPatternMode, o_stepReturn, o_stepReturn2);
          TrcTrace(Translate("Tip pick up step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, Translate(""), Translate(""));
        }
        if (commandFromServer == "mph96Aspirate")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("aspirateSequence"), aspirateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          JSON_GetFloatValue(Translate("aspirateVolume"), aspirateVolume);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("liquidClass"), liquidClass);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("aspirateMode"), aspirateMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("capacitiveLLD"), capacitiveLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("liquidFollowing"), liquidFollowing);
          JSON_GetFloatValue(Translate("submergeDepth"), submergeDepth);
          JSON_GetFloatValue(Translate("liquidHeight"), liquidHeight);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("mixCycles"), mixCycles);
          JSON_GetFloatValue(Translate("mixPosition"), mixPosition);
          JSON_GetFloatValue(Translate("mixVolume"), mixVolume);
          JSON_GetFloatValue(Translate("airTransportRetractDist"), airTransportRetractDist);
          if (aspirateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, aspirateSequence, seq);
          }
          STAR_OEM_TOOLKIT::MPH96_Aspirate(ML_STAR, seq, aspirateVolume, channelVariable, liquidClass, sequenceCounting, aspirateMode, capacitiveLLD, liquidFollowing, submergeDepth, liquidHeight, mixCycles, mixPosition, mixVolume, airTransportRetractDist, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4);
          TrcTrace(Translate("Aspirate step return 1:"), o_stepReturn);
          TrcTrace(Translate("Aspirate step return 2:"), o_stepReturn2);
          TrcTrace(Translate("Aspirate step return 3:"), o_stepReturn3);
          TrcTrace(Translate("Aspirate step return 3:"), o_stepReturn4);
          o_stepReturn2 = StrFStr(o_stepReturn2);
          o_stepReturn3 = StrFStr(o_stepReturn3);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4);
        }
        if (commandFromServer == "mph96Dispense")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("dispenseSequence"), dispenseSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          JSON_GetFloatValue(Translate("dispenseVolume"), dispenseVolume);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("liquidClass"), liquidClass);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("dispenseMode"), dispenseMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("capacitiveLLD"), capacitiveLLD);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("liquidFollowing"), liquidFollowing);
          JSON_GetFloatValue(Translate("submergeDepth"), submergeDepth);
          JSON_GetFloatValue(Translate("liquidHeight"), liquidHeight);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("mixCycles"), mixCycles);
          JSON_GetFloatValue(Translate("mixPosition"), mixPosition);
          JSON_GetFloatValue(Translate("mixVolume"), mixVolume);
          JSON_GetFloatValue(Translate("airTransportRetractDist"), airTransportRetractDist);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("zMoveAfterStep"), zMoveAfterStep);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sideTouch"), sideTouch);
          if (dispenseSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
            BuildTempSequenceFromPositions(labwarePositions, seq);
          }
          else
          {
            DevGetSequenceRef(ML_STAR, dispenseSequence, seq);
          }
          STAR_OEM_TOOLKIT::MPH96_Dispense(ML_STAR, seq, dispenseVolume, liquidClass, sequenceCounting, dispenseMode, capacitiveLLD, liquidFollowing, submergeDepth, liquidHeight, mixCycles, mixPosition, mixVolume, airTransportRetractDist, zMoveAfterStep, sideTouch, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4);
          TrcTrace(Translate("Aspirate step return 1:"), o_stepReturn);
          TrcTrace(Translate("Aspirate step return 2:"), o_stepReturn2);
          TrcTrace(Translate("Aspirate step return 3:"), o_stepReturn3);
          TrcTrace(Translate("Aspirate step return 4:"), o_stepReturn4);
          o_stepReturn2 = StrFStr(o_stepReturn2);
          o_stepReturn3 = StrFStr(o_stepReturn3);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4);
        }
        if (commandFromServer == "mph96TipEject")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("wasteSequence"), wasteSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("channelVariable"), channelVariable);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("tipEjectToKnownPosition"), tipEjectToKnownPosition);
          if (tipEjectToKnownPosition == 0)
          {
            if (wasteSequence == "")
            {
              HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("labwarePositions"), labwarePositions);
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
            else
            {
              DevGetSequenceRef(ML_STAR, wasteSequence, seq);
            }
          }
          else
          {
            SeqCopySequence(seq, ML_STAR.Waste);
          }
          STAR_OEM_TOOLKIT::MPH96_TipEject(ML_STAR, ML_STAR.Waste16, sequenceCounting, tipEjectToKnownPosition, o_stepReturn, o_stepReturn2);
          TrcTrace(Translate("Tip eject MPH96 step return:"), o_stepReturn);
          TrcTrace(Translate("Tip eject MPH96 step return2:"), o_stepReturn2);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, Translate(""), Translate(""));
        }
        if (commandFromServer == "loadCarrier")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("carrierName"), carrierName);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("barcodeFileName"), barcodeFileName);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("barcodeReadPositions"), barcodeReadPositions);
          STAR_OEM_TOOLKIT::Carrier_Load(ML_STAR, carrierName, barcodeFileName, barcodeReadPositions, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4, o_carrierBC, o_carrierPositionsBCs);
          TrcTrace(Translate("Load carrier step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, o_stepReturn2, o_stepReturn3, o_stepReturn4);
        }
        if (commandFromServer == "unloadCarrier")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("carrierName"), carrierName);
          STAR_OEM_TOOLKIT::Carrier_Unload(ML_STAR, carrierName, o_stepReturn);
          TrcTrace(Translate("Unload Carrier step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""));
        }
        if (commandFromServer == "gripGet")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidSequence"), lidSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("toolSequence"), toolSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("transportMode"), transportMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("gripForce"), gripForce);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("gripperToolChannel"), gripperToolChannel);
          JSON_GetFloatValue(Translate("gripWidth"), gripWidth);
          JSON_GetFloatValue(Translate("gripHeight"), gripHeight);
          JSON_GetFloatValue(Translate("widthBefore"), widthBefore);
          JSON_GetFloatValue(Translate("gripSpeed"), gripSpeed);
          JSON_GetFloatValue(Translate("zSpeed"), zSpeed);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("checkPlate"), checkPlate);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
          }
          if (lidSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, lidSequence, lidSeq);
          }
          DevGetSequenceRef(ML_STAR, toolSequence, toolSeq);
          STAR_OEM_TOOLKIT::Channels_1mL_COREGrippers_Get(ML_STAR, seq, lidSeq, toolSeq, sequenceCounting, transportMode, gripForce, gripperToolChannel, gripWidth, gripHeight, widthBefore, gripSpeed, zSpeed, checkPlate, o_stepReturn);
          TrcTrace(Translate("Channel 1mL -  CO-RE Gripper Get - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""));
        }
        if (commandFromServer == "gripMove")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("xAcceleration"), xAcceleration);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
          }
          STAR_OEM_TOOLKIT::Channels_1mL_COREGrippers_Move(ML_STAR, seq, xAcceleration, o_stepReturn);
          TrcTrace(Translate("Channel 1mL -  CO-RE Gripper Move - step return:"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""));
        }
        if (commandFromServer == "gripPlace")
        {
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateSequence"), plateSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidSequence"), lidSequence);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("toolSequence"), toolSequence);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("sequenceCounting"), sequenceCounting);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("transportMode"), transportMode);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("ejectToolWhenFinish"), ejectToolWhenFinish);
          HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("ejectToolWhenFinish"), ejectToolWhenFinish);
          JSON_GetFloatValue(Translate("zSpeed"), zSpeed);
          JSON_GetFloatValue(Translate("platePressOnDistance"), platePressOnDistance);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("xAcceleration"), xAcceleration);
          HSLJsonLib::GetIntegerProperty(objJSONFromServer, Translate("checkPlate"), checkPlate);
          if (plateSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("plateLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, plateSequence, seq);
          }
          if (lidSequence == "")
          {
            HSLJsonLib::GetStringProperty(objJSONFromServer, Translate("lidLabwarePositions"), labwarePositions);
            if (labwarePositions != "")
            {
              BuildTempSequenceFromPositions(labwarePositions, seq);
            }
          }
          else
          {
            DevGetSequenceRef(ML_STAR, lidSequence, lidSeq);
          }
          DevGetSequenceRef(ML_STAR, toolSequence, toolSeq);
          STAR_OEM_TOOLKIT::Channels_1mL_COREGrippers_Place(ML_STAR, seq, lidSeq, toolSeq, sequenceCounting, transportMode, ejectToolWhenFinish, zSpeed, platePressOnDistance, xAcceleration, checkPlate, o_stepReturn);
          TrcTrace(Translate("Channel 1mL -  CO-RE Gripper Place - step return :"), o_stepReturn);
          SendStepReturnToServer(commandFromServer, o_stepReturn, Translate(""), Translate(""), Translate(""));
        }
        HSLJsonLib::Release(objJSONFromServer);
        if (commandFromServer == "end")
        {
          SendTextMessageToServer(Translate("Good Bye!"));
          break;
        }
      }
    }
    HSLHttp::Release(objHttp);
    STAR_OEM_TOOLKIT::_ExitLibrary();
  } }
