#include "Demo Methods\\BMG Reader Test.res"
global device ML_STAR ("Demo Methods\\BMG Reader Test.lay", "ML_STAR", hslTrue);
global device HxFan ("Demo Methods\\BMG Reader Test.lay", "HxFan", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._19AC7FF8_2C7A_4555_AE3B_3A8CB9466EF3("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"); // Head96EmptyWasher
  } }
